/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "component-manager": {
        "components":
        [
            // this is to use our derived Teleop PSM, the name must
            // match the name the console would use,
            // i.e. <master>-<slave>
            {
                "shared-library": "dvrk_mesh_vf",
                "class-name": "mtsDerivedTeleOperationPSM",
                "constructor-arg": {
                    "Name": "MTML-PSM2",
                    "Period": 0.001
                }
            },
            {
                "shared-library": "dvrk_mesh_vf",
                "class-name": "mtsDerivedIntuitiveResearchKitPSM",
                "constructor-arg": {
                    "Name": "PSM2",
                    "Period": 0.001
                }
            }
            ,
            {
                "shared-library": "dvrk_mesh_vf",
                "class-name": "mtsDerivedROSBridge",
                "constructor-arg": {
                    "Name": "ros-Bridge",
                    "Period": 0.1
                },
                "configure-parameter": "rosBridge.json"
            }
            ,
            {
                "shared-library": "dvrk_mesh_vf",
                "class-name": "mtsDerivedIGTLBridge",
                "constructor-arg": {
                    "Name": "igtl-Bridge",
                    "Period": 0.1
                },
                "configure-parameter": "igtlBridge.json"
            }
        ],
        "connections":
        [
            {
                "required":{
                    "component": "ros-Bridge",
                    "interface": "requiresPSM2"
                },
                "provided":{
                    "component": "PSM2",
                    "interface": "providesPSM2"
                }
            },
            {
                "required":{
                    "component": "igtl-Bridge",
                    "interface": "requiresPSM2"
                },
                "provided":{
                    "component": "PSM2",
                    "interface": "providesPSM2"
                }
            }
        ]
    }
    ,
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "system": "jhu-dVRK",
            "serial": "22723",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM_DERIVED",
            "simulation": "KINEMATIC",
            "arm": "arm/PSM_KIN_SIMULATED_LARGE_NEEDLE_DRIVER_400006.json",
            "base-frame": {
                "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,          0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            // this is where we tell the console to use our manually
            // loaded teleop, using "type"
            "type": "TELEOP_PSM_DERIVED",
            "mtm": "MTML",
            "psm": "PSM2"
        }
    ]
}
